CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:CD56
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:CD56
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0025,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:OrigGreen
    Name the primary objects to be identified:Epithelium
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0001,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:OrigRed
    Name the primary objects to be identified:CD56
    Typical diameter of objects, in pixel units (Min,Max):11,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:10|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredTotalNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:150
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:CD56
    Calculate the Zernike features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:CD56
    Name the output objects:FilteredTotalCD56
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Epithelium
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:14|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
    Select the objects to filter:Epithelium
    Name the output objects:FilteredTotalEpithelium
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:85
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:FilteredTotalEpithelium
    Name the output objects:EpiExpand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:45
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
RelateObjects:[module_num:16|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
    Parent objects:FilteredTotalNuclei
    Child objects:FilteredTotalCD56
    Name the output object:RelateTotalCD56
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MaskObjects:[module_num:17|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
    Select objects to be masked:FilteredTotalNuclei
    Name the masked objects:StromalNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EpiExpand
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:18|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
    Select objects to be masked:RelateTotalCD56
    Name the masked objects:StromalCD56
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EpiExpand
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureImageAreaOccupied:[module_num:19|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:StromalNuclei
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
CalculateMath:[module_num:20|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
    Name the output measurement:StromalCD56_CountPercentage
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_StromalCD56
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_StromalNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:21|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
    Name the output measurement:StromalCD56_Density
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_StromalCD56
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_StromalNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:7506098.7
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MaskObjects:[module_num:22|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
    Select objects to be masked:FilteredTotalNuclei
    Name the masked objects:TumorNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EpiExpand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:23|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
    Select objects to be masked:RelateTotalCD56
    Name the masked objects:TumorCD56
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:EpiExpand
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:24|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:TumorNuclei
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
CalculateMath:[module_num:25|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
    Name the output measurement:TumorCD56_CountPercent
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_TumorCD56
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_TumorNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:26|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
    Name the output measurement:TumorCD56_density
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_TumorCD56
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_TumorNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:7506098.7
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureImageAreaOccupied:[module_num:27|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enabled:False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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:FilteredTotalNuclei
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
IdentifySecondaryObjects:[module_num:28|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enabled:False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
    Select the input objects:FilteredTotalCD56
    Name the objects to be identified:IdentifyTotalCD56
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigRed
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

CalculateMath:[module_num:29|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
    Name the output measurement:TotalCD56count
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_StromalCD56
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Count_TumorCD56
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:30|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
    Name the output measurement:TotalNucleiCount
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_StromalNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Count_TumorNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:31|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
    Name the output measurement:TotalNucleiArea
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:AreaOccupied_AreaOccupied_StromalNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:AreaOccupied_AreaOccupied_TumorNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:32|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
    Name the output measurement:TotalCD56_Positivity
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_TotalCD56count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalNucleiCount
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:33|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
    Name the output measurement:TotalCD56_Density
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_TotalCD56count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_TotalNucleiArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:7506098.7
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:34|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Desktop\\Pipelines_SpatialTILs measurement\\CD56
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_StromalCD56,Image|Count_TumorNuclei,Image|Count_StromalNuclei,Image|Count_TumorCD56,Image|AreaOccupied_AreaOccupied_TumorNuclei,Image|AreaOccupied_AreaOccupied_StromalNuclei,Image|FileName_CD56,Image|Math_StromalCD56_CountPercentage,Image|Math_StromalCD56_Density,Image|Math_TumorCD56_CountPercent,Image|Math_TumorCD56_density,Image|Math_TotalCD56_Positivity,Image|Math_TotalCD56_Density,StromalNuclei|Number_Object_Number,TumorNuclei|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NBHS_TMA_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:CD56.csv
    Use the object name for the file name?:No
